PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = latest_sound_vowels
  keyboardBackend = ioHub
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Routines
  Routine trial
    SoundComponent sound_vowels
      sound = mainpairs/joja.wav
      startVal [time (s)] = 9
      stopVal [duration (s)] = 3.5
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Listen to a pair of vowels. Please answer whether they are the same vowels or not. It will be played in 3 seconds.
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 13.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 6
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 7.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 8.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 13.0
      stopVal [duration (s)] = 10
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  Routine A_sa_A_
    SoundComponent sound_vowels_3
      sound = mainpairs/A.sa+A.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_11
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_12
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_13
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_14
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_15
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_3
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine u_u_so
    SoundComponent sound_vowels_4
      sound = mainpairs/u+u.so.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_16
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_17
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_18
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_19
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_20
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_4
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine joAjoApA
    SoundComponent sound_vowels_5
      sound = mainpairs/joAjoApA.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_21
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_22
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_23
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_24
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_25
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_5
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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
  Routine A_sa_sa
    SoundComponent sound_vowels_7
      sound = mainpairs/A.sa+sa.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_31
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_32
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_33
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_34
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_35
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_7
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine A
    SoundComponent sound_vowels_9
      sound = mainpairs/A.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_41
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_42
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_43
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_44
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_45
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_9
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine A_A_sa
    SoundComponent sound_vowels_10
      sound = mainpairs/A+A.sa.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_46
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_47
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_48
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_49
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_50
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_10
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine A_jo_A
    SoundComponent sound_vowels_11
      sound = mainpairs/A+jo.A.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_51
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_52
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_53
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_54
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_55
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_11
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine AAsapA
    SoundComponent sound_vowels_12
      sound = mainpairs/AAsapA.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_56
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_57
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_58
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_59
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_60
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_12
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine AAsapsa
    SoundComponent sound_vowels_13
      sound = mainpairs/AAsapsa.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_61
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_62
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_63
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_64
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_65
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_13
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine AjoApA
    SoundComponent sound_vowels_14
      sound = mainpairs/AjoApA.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_66
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_67
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_68
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_69
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_70
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_14
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine usousopso
    SoundComponent sound_vowels_15
      sound = mainpairs/usousopso.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_71
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_72
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_73
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_74
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_75
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_15
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine usoupso
    SoundComponent sound_vowels_16
      sound = mainpairs/usoupso.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_76
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_77
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_78
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_79
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_80
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_16
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine usosopso
    SoundComponent sound_vowels_17
      sound = mainpairs/usosopso.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_81
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_82
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_83
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_84
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_85
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_17
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine upso
    SoundComponent sound_vowels_18
      sound = mainpairs/upso.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_86
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_87
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_88
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_89
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_90
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_18
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine AjoApjo
    SoundComponent sound_vowels_19
      sound = mainpairs/AjoApjo.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_91
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_92
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_93
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_94
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_95
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_19
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine Apsa
    SoundComponent sound_vowels_20
      sound = mainpairs/Apsa.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_96
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_97
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_98
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_99
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_100
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_20
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine A_sa_sapsa
    SoundComponent sound_vowels_8
      sound = mainpairs/A.sa+sapsa.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_36
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_37
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_38
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_39
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_40
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_8
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine A_sa_A_sasecond
    SoundComponent A_saandA_sa
      sound = mainpairs/A.sa+A.sa.wav
      startVal [time (s)] = 9
      stopVal [duration (s)] = 3.5
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        It was a trial. Now please answer whether the vowels are the same or not. It will take about 20 minutes
    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 13.5
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 6
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 7.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_10
      letterHeight = 0.05
      startVal [time (s)] = 8.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      startVal [time (s)] = 13.5
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine AsaApA
    SoundComponent sound_vowels_21
      sound = mainpairs/AsaApA.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_101
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_102
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_103
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_104
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_105
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_21
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine AsaApsa
    SoundComponent sound_vowels_22
      sound = mainpairs/AsaApsa.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_106
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_107
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_108
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_109
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_110
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_22
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine AsaAsapA
    SoundComponent sound_vowels_23
      sound = mainpairs/AsaAsapA.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_111
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_112
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_113
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_114
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_115
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_23
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine AsaAsapsa
    SoundComponent sound_vowels_24
      sound = mainpairs/AsaAsapsa.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_116
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_117
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_118
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_119
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_120
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_24
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine AsasapA
    SoundComponent sound_vowels_25
      sound = mainpairs/AsasapA.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_121
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_122
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_123
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_124
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_125
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_25
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine ja
    SoundComponent sound_vowels_26
      sound = mainpairs/ja.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_126
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_127
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_128
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_129
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_130
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_26
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine jo
    SoundComponent sound_vowels_27
      sound = mainpairs/jo.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_131
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_132
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_133
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_134
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_135
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_27
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine joja
    SoundComponent sound_vowels_28
      sound = mainpairs/joja.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_136
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_137
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_138
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_139
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_140
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_28
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine so
    SoundComponent sound_vowels_29
      sound = mainpairs/so.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_141
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_142
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_143
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_144
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_145
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_29
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine sa
    SoundComponent sound_vowels_30
      sound = mainpairs/sa.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_146
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_147
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_148
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_149
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_150
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_30
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine u
    SoundComponent sound_vowels_31
      sound = mainpairs/u.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_151
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_152
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_153
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_154
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_155
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_31
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine jopA
    SoundComponent sound_vowels_32
      sound = mainpairs/jopA.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_156
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_157
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_158
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_159
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_160
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_32
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine usa
    SoundComponent sound_vowels_33
      sound = mainpairs/usa.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_161
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_162
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_163
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_164
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_165
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_33
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine uja
    SoundComponent sound_vowels_34
      sound = mainpairs/uja.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_166
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_167
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_168
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_169
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_170
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_34
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine sosa
    SoundComponent sound_vowels_35
      sound = mainpairs/sosa.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_171
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_172
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_173
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_174
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_175
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_35
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine soja
    SoundComponent sound_vowels_36
      sound = mainpairs/soja.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_176
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_177
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_178
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_179
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_180
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_36
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine sapja
    SoundComponent sound_vowels_37
      sound = mainpairs/sapja.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_181
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_182
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_183
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_184
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_185
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_37
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine joAApA
    SoundComponent sound_vowels_38
      sound = mainpairs/joAApA.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_186
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_187
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_188
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_189
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_190
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_38
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine sopjo
    SoundComponent sound_vowels_39
      sound = mainpairs/sopjo.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_191
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_192
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_193
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_194
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_195
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_39
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine joAApjo
    SoundComponent sound_vowels_40
      sound = mainpairs/joAApjo.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_196
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_197
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_198
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_199
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_200
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_40
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine joAjopA
    SoundComponent sound_vowels_41
      sound = mainpairs/joAjopA.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_201
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_202
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_203
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_204
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_205
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_41
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine joAjopjo
    SoundComponent sound_vowels_42
      sound = mainpairs/joAjopjo.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_206
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_207
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_208
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_209
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_210
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_42
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine jojoApA
    SoundComponent sound_vowels_43
      sound = mainpairs/jojoApA.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_211
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_212
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_213
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_214
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_215
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_43
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine saAsapA
    SoundComponent sound_vowels_44
      sound = mainpairs/saAsapA.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_216
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_217
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_218
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_219
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_220
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_44
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine sojojopjo
    SoundComponent sound_vowels_45
      sound = mainpairs/sojojopjo.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_221
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_222
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_223
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_224
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_225
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_45
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine sousopso
    SoundComponent sound_vowels_46
      sound = mainpairs/sousopso.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_226
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_227
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_228
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_229
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_230
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_46
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine joAjoApjo
    SoundComponent sound_vowels_47
      sound = mainpairs/joAjoApjo.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_231
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_232
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_233
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_234
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_235
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_47
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine jojoApjo
    SoundComponent sound_vowels_48
      sound = mainpairs/jojoApjo.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_236
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_237
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_238
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_239
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_240
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_48
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine josojopjo
    SoundComponent sound_vowels_49
      sound = mainpairs/josojopjo.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_241
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_242
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_243
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_244
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_245
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_49
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine sosojopso
    SoundComponent sound_vowels_50
      sound = mainpairs/sosojopso.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_246
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_247
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_248
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_249
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_250
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_50
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine sojosojopso
    SoundComponent sound_vowels_51
      sound = mainpairs/sojosojopso.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_251
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_252
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_253
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_254
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_255
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_51
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine sojojopso
    SoundComponent sound_vowels_52
      sound = mainpairs/sojojopso.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_256
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_257
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_258
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_259
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_260
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_52
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine sojosopjo
    SoundComponent sound_vowels_53
      sound = mainpairs/sojosopjo.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_261
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_262
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_263
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_264
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_265
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_53
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine sojosojopjo
    SoundComponent sound_vowels_54
      sound = mainpairs/sojosojopjo.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_266
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_267
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_268
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_269
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_270
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_54
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine sojosopso
    SoundComponent sound_vowels_55
      sound = mainpairs/sojosopso.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_271
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_272
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_273
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_274
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_275
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_55
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine sosojopjo
    SoundComponent sound_vowels_56
      sound = mainpairs/sosojopjo.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_276
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_277
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_278
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_279
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_280
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_56
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine josojopso
    SoundComponent sound_vowels_57
      sound = mainpairs/josojopso.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_281
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_282
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_283
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_284
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_285
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_57
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine ja_sa_japja
    SoundComponent sound_vowels_58
      sound = mainpairs/ja+sa.japja.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_286
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_287
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_288
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_289
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_290
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_58
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine ja_sa_japsa
    SoundComponent sound_vowels_59
      sound = mainpairs/ja+sa.japsa.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_291
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_292
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_293
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_294
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_295
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_59
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine sa_sa_japsa
    SoundComponent sound_vowels_60
      sound = mainpairs/sa+sa.japsa.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_296
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_297
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_298
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_299
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_300
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_60
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine sa_sa_japja
    SoundComponent sound_vowels_61
      sound = mainpairs/sa+sa.japja.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_301
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_302
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_303
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_304
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_305
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_61
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine sa_ja_japja
    SoundComponent sound_vowels_62
      sound = mainpairs/sa.ja+japja.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_306
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_307
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_308
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_309
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_310
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_62
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine sa_ja_japsa
    SoundComponent sound_vowels_63
      sound = mainpairs/sa.ja+japsa.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_311
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_312
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_313
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_314
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_315
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_63
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine sa_ja_sa_japja
    SoundComponent sound_vowels_64
      sound = mainpairs/sa.ja+sa.japja.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_316
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_317
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_318
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_319
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_320
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_64
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine sa_ja_sa_japsa
    SoundComponent sound_vowels_65
      sound = mainpairs/sa.ja+sa.japsa.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_321
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_322
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_323
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_324
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_325
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_65
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine sa_ja_sapja
    SoundComponent sound_vowels_66
      sound = mainpairs/sa.ja+sapja.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_326
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_327
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_328
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_329
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_330
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_66
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine sa_ja_sapsa
    SoundComponent sound_vowels_67
      sound = mainpairs/sa.ja+sapsa.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_331
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_332
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_333
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_334
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_335
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_67
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine sa_A_sapsa
    SoundComponent sound_vowels_68
      sound = mainpairs/sa+A.sapsa.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_336
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_337
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_338
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_339
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_340
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_68
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine ja_sa_ja
    SoundComponent sound_vowels_69
      sound = mainpairs/ja+sa.ja.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_341
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_342
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_343
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_344
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_345
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_69
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine jo_A_A
    SoundComponent sound_vowels_70
      sound = mainpairs/jo.A+A.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_346
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_347
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_348
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_349
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_350
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_70
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine jo_A_jo_A
    SoundComponent sound_vowels_71
      sound = mainpairs/jo.A+jo.A.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_351
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_352
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_353
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_354
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_355
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_71
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine jo_A_jo
    SoundComponent sound_vowels_72
      sound = mainpairs/jo.A+jo.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_356
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_357
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_358
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_359
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_360
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_72
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine jo_jo_A
    SoundComponent sound_vowels_73
      sound = mainpairs/jo+jo.A.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_361
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_362
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_363
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_364
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_365
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_73
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine jo_so_jo
    SoundComponent sound_vowels_74
      sound = mainpairs/jo+so.jo.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_366
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_367
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_368
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_369
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_370
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_74
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine sa_ja_ja
    SoundComponent sound_vowels_75
      sound = mainpairs/sa.ja+ja.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_371
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_372
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_373
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_374
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_375
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_75
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine sa_ja_sa_ja
    SoundComponent sound_vowels_76
      sound = mainpairs/sa.ja+sa.ja.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_376
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_377
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_378
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_379
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_380
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_76
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine sa_ja_sa
    SoundComponent sound_vowels_77
      sound = mainpairs/sa.ja+sa.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_381
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_382
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_383
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_384
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_385
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_77
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine sa_A_sa
    SoundComponent sound_vowels_78
      sound = mainpairs/sa+A.sa.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_386
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_387
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_388
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_389
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_390
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_78
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine sa_sa_ja
    SoundComponent sound_vowels_79
      sound = mainpairs/sa+sa.ja.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_391
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_392
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_393
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_394
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_395
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_79
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine so_jo_jo
    SoundComponent sound_vowels_80
      sound = mainpairs/so.jo+jo.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_396
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_397
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_398
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_399
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_400
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_80
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine so_jo_so_jo
    SoundComponent sound_vowels_81
      sound = mainpairs/so.jo+so.jo.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_401
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_402
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_403
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_404
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_405
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_81
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine so_jo_so
    SoundComponent sound_vowels_82
      sound = mainpairs/so.jo+so.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_406
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_407
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_408
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_409
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_410
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_82
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine so_so_jo
    SoundComponent sound_vowels_83
      sound = mainpairs/so+so.jo.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_411
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_412
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_413
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_414
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_415
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_83
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine so_u_so
    SoundComponent sound_vowels_84
      sound = mainpairs/so+u.so.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_416
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_417
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_418
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_419
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_420
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_84
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine sousopu
    SoundComponent sound_vowels_85
      sound = mainpairs/sousopu.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_421
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_422
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_423
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_424
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_425
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_85
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine u_so_so
    SoundComponent sound_vowels_86
      sound = mainpairs/u.so+so.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_426
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_427
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_428
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_429
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_430
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_86
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine u_so_u_so
    SoundComponent sound_vowels_87
      sound = mainpairs/u.so+u.so.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_431
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_432
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_433
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_434
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_435
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_87
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine u_so_u
    SoundComponent sound_vowels_88
      sound = mainpairs/u.so+u.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_436
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_437
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_438
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_439
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_440
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_88
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine usosopu
    SoundComponent sound_vowels_89
      sound = mainpairs/usosopu.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_441
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_442
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_443
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_444
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_445
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_89
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine usoupu
    SoundComponent sound_vowels_90
      sound = mainpairs/usoupu.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_446
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_447
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_448
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_449
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_450
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_90
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine usousopu
    SoundComponent sound_vowels_91
      sound = mainpairs/usousopu.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_451
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_452
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_453
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_454
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_455
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_91
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine uusopso
    SoundComponent sound_vowels_92
      sound = mainpairs/uusopso.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_456
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_457
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_458
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_459
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_460
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_92
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine uusopu
    SoundComponent sound_vowels_93
      sound = mainpairs/uusopu.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3.5
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    TextComponent text_461
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next vowels will be played.
    TextComponent text_462
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10.0
      text = If you think the voewls were the same. press "y" on your keyboard now. Otherwise, press "n".
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    TextComponent text_463
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_464
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_465
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = 1
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    KeyboardComponent key_resp_93
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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Flow
  Routine trial
  Routine A_sa_A_sasecond
  Routine usousopu
  Routine uusopso
  Routine sousopu
  Routine sa_ja_sa
  Routine u_so_so
  Routine sojojopjo
  Routine u_so_u_so
  Routine sa_ja_sa_ja
  Routine so_u_so
  Routine jo_jo_A
  Routine u_so_u
  Routine sa_ja_ja
  Routine usosopu
  Routine so_so_jo
  Routine ja_sa_ja
  Routine sa_A_sapsa
  Routine jo_A_A
  Routine usoupu
  Routine ja_sa_japja
  Routine joAApjo
  Routine saAsapA
  Routine ja_sa_japsa
  Routine sopjo
  Routine sa_A_sa
  Routine jojoApjo
  Routine uusopu
  Routine sojosojopjo
  Routine sosojopso
  Routine A_sa_sapsa
  Routine jo_A_jo_A
  Routine jo_so_jo
  Routine sojosojopso
  Routine josojopjo
  Routine joAjoApjo
  Routine so_jo_jo
  Routine sousopso
  Routine sa_sa_ja
  Routine joAjopjo
  Routine sa_sa_japsa
  Routine jo_A_jo
  Routine sojosopjo
  Routine sa_ja_japja
  Routine joAjopA
  Routine sapja
  Routine sa_ja_sa_japja
  Routine josojopso
  Routine so_jo_so_jo
  Routine sa_sa_japja
  Routine sojojopso
  Routine jojoApA
  Routine so_jo_so
  Routine joAApA
  Routine sojosopso
  Routine usa
  Routine soja
  Routine AsaAsapsa
  Routine uja
  Routine sa_ja_sapsa
  Routine u
  Routine sa_ja_sapja
  Routine jopA
  Routine usoupso
  Routine sosojopjo
  Routine sosa
  Routine A
  Routine sa_ja_japsa
  Routine Apsa
  Routine sa_ja_sa_japsa
  Routine A_jo_A
  Routine jo
  Routine so
  Routine joja
  Routine ja
  Routine AsasapA
  Routine AjoApA
  Routine A_A_sa
  Routine sa
  Routine AsaAsapA
  Routine usousopso
  Routine AAsapA
  Routine AjoApjo
  Routine AAsapsa
  Routine usosopso
  Routine A_sa_A_
  Routine u_u_so
  Routine AsaApA
  Routine upso
  Routine AsaApsa
  Routine joAjoApA
  Routine A_sa_sa
